#-----------------   VERSION AND SUBJECT INFO   -----------------
#Before running, set version to 1, 2, 3, or 4 (to run the appropriate list)
#Before running, set subject id to the current  number
#Before running, set experiment_id to Exp1real or Exp2novel

int version_being_run = 1; ## CHANGE BEFORE RUNNING (1, 2, 3, or 4)
string subject_id = "subj005"; ## CHANGE BEFORE RUNNING


string date = date_time("yyyy")+date_time("mm")+date_time("dd")+"-"+date_time("hh")+"-"+date_time("nn")+"-"+date_time("ss");
logfile.set_filename(subject_id + "_List" + string(version_being_run) + "_" + date + ".log");


#output_file ofile1 = new output_file;
#ofile1.open( "ratings_List" + string(version_being_run) + "_" + subject_id + "_" + date + ".txt", false ); 					# set "true" to overwrite while debugging (CHANGE THIS TO FALSE FOR REAL EXPERIMENT)
#string output_string = "LIST " + string(version_being_run) + "_session1" + rating_locations + subject_id + "\ntrialnumber\tresponse\ttime\tcondition";

# Number of sentences in the experiment
int critical_sentences_in_exp = 48;
int filler_sentences_in_exp = 144;
# Number of blocks to divide the experiment into
int sets_in_exp = 6;
# Number of items in the array for critical stims
int things = 19;
int sentences_in_exp = critical_sentences_in_exp + filler_sentences_in_exp;

#put in practice
#redo stroke counts


#-----------------   CRITICAL STIMULUS LIST   -----------------
#Format:  {lede, boundpart1, boundpart2, said that, were, added,
#				that, therest, wouldbe, tail2, tail3, tail4, (13) num. of regions after therest,
#				(14) 'list', (15) criticalorfiller, (16) item number
#				(17) compquestion, (18) correctanswer, (19) wronganswer
#}
array <string> expblock[critical_sentences_in_exp][things]={
{"Mary was preparing to throw a party for John's relatives", "She asked John whether", "were staying in his apartment", "John said that", "were", "He added", "that", "the rest", "would be", "staying", "in a hotel", "", "3", "1", "critical", "1", "Who was Mary throwing a party for?", "John's relatives", "Her co-workers"},
{"Bill took out the fancy candles from the drawer", "He asked Claire whether", "should be lit for dinner", "Claire said that", "should", "She added", "that", "the rest", "would be", "needed", "later", "", "3", "2", "critical", "2", "What were Bill and Claire lighting the candles for?", "Dinner", "A birthday cake"},
{"Susie heard Matthew's friends at the door", "She asked him whether", "were going to the movie with him", "Matthew said that", "were", "He added", "that", "the rest", "would be", "too", "busy", "", "3", "3", "critical", "3", "Whose friends were at the door?", "Matthew's", "Susie's"},
{"The zookeeper was going to do a routine check-up on the lions", "He asked Robbie whether", "had been fed that morning", "Robbie said that", "had", "He added", "that", "the rest", "would be", "fed", "in the afternoon", "", "3", "4", "critical", "4", "Who was going to check up on the lions?", "The zookeeper", "Robbie"},
{"In the store, Sally was unpacking the new shipment of shoes", "She asked Tiffany whether", "should be marked on sale", "Tiffany said that", "should", "She added", "that", "the rest", "would be", "at", "full price", "", "3", "1", "critical", "5", "What was in the shipment?", "Shoes", "Pants"},
{"Mrs. Myers was worried that her students weren't ready for the test", "She asked the Mr. Robbins whether", "had to take the test", "Mr. Robbins said that", "did", "He added", "that", "the rest", "would be", "able to", "take it", "the next weekend", "4", "2", "critical", "6", "Who was worried about their students?", "Mrs. Myers", "Mr. Robbins"},
{"Trevor was curious about the professors' summer breaks", "He asked Dr. Johnson whether", "would be going out of town", "Dr. Johnson said that", "would", "He added", "that", "the rest", "would be", "around", "all summer", "", "3", "3", "critical", "7", "What break did Trevor ask about?", "Summer break", "Winter break"},
{"The local papers were all covering Jason's press conference", "Jason asked his publicist Sally whether", "would run a front-page story", "Sally said that", "would", "She added", "that", "the rest", "would be", "running", "other stories", "", "3", "4", "critical", "8", "Where were some of the papers going to run the story?", "The front page", "The editorials section"},
{"Terry and his coach Rick were discussing top runners from the area", "Terry asked Rick whether", "would be at the race", "Rick said that", "would", "He added", "that", "the rest", "would be", "resting", "for the championships", "", "3", "1", "critical", "9", "What's the coach's name?", "Rick", "Terry"},
{"Lydia was trying to choose one of the kittens from her friend Kim's pet store", "She asked Kim if", "had gotten their shots yet", "Kim said that", "had", "She added", "that", "the rest", "would be", "getting them", "later", "", "3", "2", "critical", "10", "What was the mother concerned about?", "Whether the kittens had shots", "Whether the kittens were spayed"},
{"Justin wanted to find out which of Mike's desserts he could eat", "He asked Mike whether", "could be made gluten free", "Mike said that", "could", "He added", "that", "the rest", "would be", "hard to do", "that way", "", "3", "3", "critical", "11", "What can't Justin eat?", "Gluten", "Dairy"},
{"Kurt and Brooke were thinking of selling their movies at a yard sale", "Brooke asked Kurt whether", "were all right to sell", "Kurt said that", "were", "He added", "that", "the rest", "would be", "inappropriate", "for kids", "", "3", "4", "critical", "12", "Why couldn't Kurt sell some of the movies?", "Inappropriate for kids", "Too unpopular"},
{"Jenna and Alex were making cupcakes", "Jenna asked Alex whether", "were ready to be frosted", "Alex said that", "were", "He added", "that", "the rest", "would be", "ready", "soon", "", "3", "1", "critical", "13", "When would the cupcakes be ready?", "Soon", "Not for a while"},
{"Lyle was driving to meet his friends at the restaurant", "He asked Sarah whether", "were already at the table", "Sarah said that", "were", "She added", "that", "the rest", "would be", "there", "in five minutes", "", "3", "2", "critical", "14", "When were the rest of the friends arriving?", "Five minutes", "Fifteen minutes"},
{"The students had prepared for the final presentation", "Allie asked Margaret whether", "were supposed to present today", "Margaret said that", "were", "She added", "that", "the rest", "would be", "presenting", "on Thursday", "", "3", "3", "critical", "15", "When would the next day of presentations be?", "Thursday", "Monday"},
{"Darren knew his relatives would come for his birthday", "Darren asked his mother, Sally, whether", "would be giving him clothes", "Sally said that", "would", "She added", "that", "the rest", "would be", "sending him", "electronics", "", "3", "4", "critical", "16", "What was Darren getting presents for?", "Birthday", "Christmas"},
{"Molly was looking at apartments", "She asked the agent Sally whether", "would be available next month", "Sally said that ", "would", "She added", "that", "the rest", "would be", "available", "in August", "", "3", "1", "critical", "17", "", "", ""},
{"Ryan had moved to a new town and was curious about the radio stations there", "He asked John whether", "would play classic rock hits", "John said that", "would", "He added", "that", "the rest", "would be", "only", "country music", "", "3", "2", "critical", "18", "", "", ""},
{"The rock band was choosing cities to visit on their next tour", "They asked their manager Mary whether", "would have good venues available", "Mary said that", "would", "She added ", "that", "the rest", "would be", "booked", "during the tour", "", "3", "3", "critical", "19", "", "", ""},
{"Alex was perusing the breakfast cereals at the grocery store", "He asked Carrie whether", "had high levels of sugar", "Carrie said that", "did", "She added", "that", "the rest", "would be", "healthier", "but", "not as tasty", "4", "4", "critical", "20", "", "", ""},
{"The kids in the first grade class were getting antsy", "Kim asked Mrs. Brady whether", "could go outside for recess", "Mrs. Brady said that", "could", "She added", "that", "the rest", "would be", "staying inside", "to do ", "make-up work", "4", "1", "critical", "21", "", "", ""},
{"The soccer players were all training very hard", "Eric asked Jack whether", "would go to the tournament", "Jack said that", "would", "He added", "that", "the rest", "would be", "staying", "in town", "", "3", "2", "critical", "22", "", "", ""},
{"The clothing store just received a shipment of jeans", "Jared asked Erica whether", "should be displayed out front", "Erica said that ", "should", "She added", "that", "the rest", "would be", "kept", "in the back", "for now", "4", "3", "critical", "23", "", "", ""},
{"Mrs. Landman was looking at laptops for her grandson", "She asked the employee Larry whether", "were easy to carry around", "Larry said that", "were", "He added", "that", "the rest", "would be", "pretty heavy", "to carry", "to classes", "4", "4", "critical", "24", "", "", ""},
{"Abby was taking her mom to meet her roommates", "Her mom asked Abby whether", "would be home right now", "Abby said that", "would", "She added", "that", "the rest", "would be", "at work", "or in class", "", "3", "1", "critical", "25", "", "", ""},
{"Alexa was looking at the puppies at the shelter", "She asked the employee Stephen whether", "would grow into large dogs", "Stephen said that", "would", "He added", "that", "the rest", "would be", "small", "when full-grown", "", "3", "2", "critical", "26", "", "", ""},
{"Eric was preparing to travel in Italy with his classmates", "Eric's mom asked him whether", "had been to Europe before", "Eric said that", "had", "He added", "that", "the rest", "would be", "nervous about", "traveling abroad", "", "3", "3", "critical", "27", "", "", ""},
{"Carrie and Tim were comparing venues for their upcoming wedding", "Carrie asked Tim whether", "would accommodate so many guests", "Tim said that", "would", "He added", "that", "the rest", "would be", "crowded", "with", "that many people", "4", "4", "critical", "28", "", "", ""},
{"Lana was watching episodes of her favorite sitcom on her day off", "Ashley asked her whether", "lasted less than an hour.", "Lana said that", "did", "She added", "that", "the rest", "would be", "too rushed", "that way", "", "3", "1", "critical", "29", "", "", ""},
{"Arthur had set up tables for the garage sale.", "Sarah asked him whether", "would display the nice dishes", "Arthur said that", "would", "He added", "that", "the rest", "would be", "too", "unstable", "", "3", "2", "critical", "30", "", "", ""},
{"Brian had hired several new people to work at his restaurant", "The chef asked him whether", "would work in the kitchen", "Brian said that", "would", "He added", "that", "the rest", "would be", "servers", "in the dining room", "", "3", "3", "critical", "31", "", "", ""},
{"Josh wanted to talk about the new movie with his co-workers", "He asked his co-worker Seth whether", "had seen the movie yet", "Seth said that", "had", "He added", "that", "the rest", "would be", "mad", "if Josh", "gave away spoilers", "4", "4", "critical", "32", "", "", ""},
{"David and Brandon were looking at upcoming video games in the magazine", "David asked Brandon whether", "would have a multiplayer mode", "Brandon said that", "would", "He added", "that", "the rest", "would be", "single player", "only", "", "3", "1", "critical", "33", "", "", ""},
{"Andrea was looking at computers in the store", "She asked the clerk Tom whether", "came with webcams built in", "Tom said that", "did", "He added", "that", "the rest", "would be", "able to use", "a USB webcam", "", "3", "2", "critical", "34", "", "", ""},
{"Molly and Tony were hosting a dinner party for Tony's classmates", "Molly asked Tony whether", "were allergic to any foods", "Tony said that", "were", "He added", "that", "the rest", "would be", "able to eat", "anything", "", "3", "3", "critical", "35", "", "", ""},
{"Max and Aaron were getting ready to host prospective students", "Max asked Aaron whether", "needed rides from the airport", "Aaron said that", "did", "He added", "that", "the rest", "would be", "driving", "themselves", "", "3", "4", "critical", "36", "", "", ""},
{"Dr. Jones was scheduling end-of-semester meetings", "The secretary asked him whether", "would be in the afternoon", "Dr. Jones said that", "would", "He added", "that", "the rest", "would be", "early", "in the morning", "", "3", "1", "critical", "37", "", "", ""},
{"Tracy and Mark were trying to choose a restaurant downtown for their rehearsal dinner", "Mark asked Tracy whether", "were open on the weekends", "Tracy said that", "were", "She added", "that", "the rest", "would be", "closed", "at that time", "", "3", "2", "critical", "38", "", "", ""},
{"Jason and Perry were ordering computers for the new lab", "Perry asked Jason whether", "would have an Internet connection", "Jason said that", "would", "He added", "that", "the rest", "would be", "for offline work", "only", "", "3", "3", "critical", "39", "", "", ""},
{"Donna and Martha were discussing the rooms of the new house", "Donna asked Martha whether", "would need to be wallpapered", "Martha said that", "would", "She added", "that", "the rest", "would be", "painted", "instead", "", "3", "4", "critical", "40", "", "", ""},
{"Brian had just finished checking the bikes in Tom's garage", "Tom asked Brian whether", "needed to get a tune-up", "Brian said that", "did", "He added", "that", "the rest", "would be", "fine", "for", "another few months", "4", "1", "critical", "41", "", "", ""},
{"Jim and Breanna were thinking of inviting their classmates to the movie theater", "Jim asked Breanna whether", "were interested in artsy movies", "Breanna said that", "were", "She added", "that", "the rest", "would  be", "bored", "at those movies", "", "3", "2", "critical", "42", "", "", ""},
{"Paul and Deb were trying to decide which gym to go to", "Paul asked Deb whether", "had discounts for college students", "Deb said that", "did", "She added", "that", "the rest", "would be", "at", "full price", "", "3", "3", "critical", "43", "", "", ""},
{"Greg was trying to choose which wine to order with dinner", "He asked the waitress Michelle whether", "would go well with fish", "Michelle said that", "would", "She added", "that", "the rest", "would be", "too sweet", "for that", "", "3", "4", "critical", "44", "", "", ""},
{"Ed and Hillary were considering several universities for grad school", "Hillary asked Ed whether", "were very competitive in admissions", "Ed said that", "were", "He added", "that", "the rest", "would be", "easy", "to get into", "", "3", "1", "critical", "45", "", "", ""},
{"Stan and Marilyn were trying to decide what type of tree to plant", "Stan asked Marilyn whether", "would grow well in shade", "Marilyn said that", "would", "She added", "that", "the rest", "would be", "better off", "in full sun", "", "3", "2", "critical", "46", "", "", ""},
{"Quinn and Chase were thinking about going to one of the season's ball games", "Quinn asked Chase whether", "were scheduled for the afternoon", "Chase said that", "were", "He added", "that", "the rest", "would be", "played", "at night", "", "3", "3", "critical", "47", "", "", ""},
{"Andy and Lisa were moving some pieces of furniture", "Lisa asked Andy whether", "would fit in his car", "Andy said that", "would", "He added", "that", "the rest", "would be", "too big", "for his car", "", "3", "4", "critical", "48", "", "", ""}
};


# (1) lede, (2) boundsentence, (3) she said that, (4-5) all of them | were  [or] (4-5) |they did, (6) she added, (7) that,
#	(8-12) stuff, (13) number of regions after "that", (14-16) blank, (17) compq, (18) rightanswer, (19) wronganswer
array <string> fillerblock[filler_sentences_in_exp][things]={
{"The student was concerned about the exams for his class", "He asked the teacher whether all of them had essay questions", "The teacher said that", "some of them", "did", "She added", "that", "he should", "prepare carefully", "beforehand", "", "", "3", "", "", "", "What was the student concerned about?", "The exams", "The final project"},
{"Arnold was excited to meet the new students in the department", "He asked his professor whether all of them were out-of-state", "The professor said that", "some of them", "were", "She added", "that", "there were even", "several", "international students", "", "", "3", "", "", "", "Were any new international students coming to the department?", "Yes", "No"},
{"Marty was trying to pick an ice cream flavor at the ice cream shop", "He asked the worker whether all of them were low-fat", "The worker said that", "some of them", "were", "He added", "that", "his favorite flavor", "was", "rainbow sherbet", "", "", "3", "", "", "", "Who was getting ice cream?", "Marty", "Jim"},
{"Laurie was at the store on Black Friday looking at cameras", "She asked the clerk whether all of them were on sale", "The clerk said that", "some of them", "were", "He added", "that", "some", "would also", "come with", "a free", "memory card", "5", "", "", "", "What did some of the cameras come with?", "Memory card", "Tote bag"},
{"Luke took the big bag of mushrooms out of the refrigerator", "He asked Jean whether all of them were going in the salad", "Jean said that", "some of them", "were", "She told Luke", "to", "pick out", "the best ones", "and give them", "to her", "", "4", "", "", "", "", "", ""},
{"Joshua and Kelly were trying to decide which café to go to to do homework", "Joshua asked Kelly whether all of them had wireless internet", "Kelly said that", "some of them", "did", "She added", "that", "what was", "more important", "was whether", "the coffee", "was good", "5", "", "", "", "", "", ""},
{"Heather was looking at new cars at the dealership", "She asked the salesman whether all of them had built-in GPS", "The salesman said that", "some of them", "did", "He added", "that", "it is", "a really convenient", "feature", "", "", "3", "", "", "", "", "", ""},
{"Erik and Jonathan were grilling some steaks", "Erik asked Jonathan whether all of them should be well-done", "Jonathan said that", "some of them", "should", "He added", "that", "most people", "are not", "too picky", "", "", "3", "", "", "", "", "", ""},
{"Bill and Diane had gathered logs for a fire", "Bill asked Diane whether all of them were dry enough to burn", "Diane said that", "some of them", "were", "She added", "that", "if they", "needed", "to gather more", "they could", "", "4", "", "", "", "", "", ""},
{"Noah and Eva were playing with toys in the yard", "Noah asked Eva whether all of them were waterproof", "Eva said that", "some of them", "were", "She added", "that", "they could", "take them", "in the pool", "", "", "3", "", "", "", "", "", ""},
{"Doug and Sara were lighting sparklers", "Sara asked Doug whether all of them were multi-colored", "Doug said that", "some of them", "were", "He added", "that", "multi-colored", "sparklers", "are", "the most", "popular", "5", "", "", "", "", "", ""},
{"Susie and Becky were looking at cottages to rent", "Susie asked Becky whether all of them were right on the lake", "Becky said that", "some of them", "were", "She added", "that", "those ones", "were", "the most", "expensive", "", "4", "", "", "", "", "", ""},
{"James was curious about Maggie's pet dogs", "He asked her whether any of them could do tricks", "Maggie said that", "some of them", "could", "She added", "that", "many of", "their tricks", "were", "quite impressive", "", "4", "", "", "", "Who had pet dogs?", "Maggie", "James"},
{"The coach was gathering up the volleyballs after practice", "He asked the players whether any of them were going flat", "The players said that", "some of them", "were", "They added", "that", "the nets", "were also", "a bit low", "", "", "3", "", "", "", "How were the volleyball nets?", "Too low", "Just right"},
{"The teachers were chaperoning the kids on the school field trip", "Before leaving, Mr. Johnson asked whether any of them had asked to go to the bathroom", "Mrs. Baker said that", "some of them", "had", "She added", "that", "she", "had", "to go", "too", "", "4", "", "", "", "Where were the kids?", "A field trip", "Vacation"},
{"Teresa, a special education teacher, had a new group of students this year", "She asked her boss whether any of them had classroom assistants", "Her boss said that", "some of them", "did.", "She added", "that", "the assistants", "were all", "highly trained", "", "", "3", "", "", "", "What did Teresa teach?", "Special education", "Physical education"},
{"Grace and Joleen were trying to decide which of their friends to ask them to help move", "Joleen asked Grace whether any of them had a pickup truck", "Grace said that", "some of them", "did", "She added", "that", "they should try", "to think of", "someone who", "was not", "very busy", "5", "", "", "", "", "", ""},
{"Travis and Kim were trying to figure out which professor to take English from", "Travis asked Kim whether any of them gave study guides before exams", "Kim said that", "some of them", "did", "She added", "that", "she cared", "more about", "which professors", "did not require", "a final paper", "5", "", "", "", "", "", ""},
{"Ian and Christine were trying to decide which yogurt shop to go to", "Christine asked Ian whether any of them had granola as a topping", "Ian said that", "some of them", "did", "He added", "that", "he wanted", "granola", "on his yogurt,", "too", "", "4", "", "", "", "", "", ""},
{"Adam and Johanna had been looking at new televisions", "Adam asked Johanna whether any of them would fit in their TV cabinet", "Johanna said that", "some of them", "would", "She added", "that", "they would", "also need", "to leave", "space for", "a DVD player", "5", "", "", "", "", "", ""},
{"Lance and Olivia were thinking about visiting one of the museums in town", "Olivia asked Lance whether any of them had dinosaur exhibits", "Lance said that", "some of them", "did", "She added", "that", "they could", "also", "look for", "a planetarium", "", "4", "", "", "", "", "", ""},
{"Claire and Andrea were trying to decide which trivia team to join", "Claire asked Andrea whether any of them were any good", "Andrea said that", "some of them", "were", "She added", "that", "her old team", "had won", "the championship", "", "", "3", "", "", "", "", "", ""},
{"The chef wanted to buy chicken from one of the local farms", "She asked her assistant whether any of them were certified organic", "The assistant said that", "some of them", "were", "He added", "that", "organic food", "is becoming", "more popular", "", "", "3", "", "", "", "", "", ""},
{"Zach was looking at tomatoes at the farmer's market", "He asked his friend whether any of them looked ripe", "His friend said that", "some of them", "did", "He added", "that", "they should", "buy", "some basil,", "too", "", "4", "", "", "", "", "", ""},
{"Ben wanted to learn about South American countries", "He asked Amy whether all of them were Spanish-speaking", "Amy said that", "only some of them", "were", "She added", "that", "many other", "languages", "are spoken", "there,", "too", "5", "", "", "", "Which countries was Ben interested in?", "South American countries", "Asian countries"},
{"The little boy wanted to look at the books in the library", "He asked his mom whether all of them were picture books", "His mother said that", "only some of them", "were", "She added", "that", "the picture books", "were", "in the", "kids' section", "", "4", "", "", "", "What did the boy want from the library?", "Books", "DVDs"},
{"Dan was talking to his roommate Chen about people from Hong Kong", "Dan asked Chen whether all of them are bilingual in Chinese and English", "Chen said that", "only some of them", "are", "He added", "that", "it depends on", "their age", "and", "education level", "", "4", "", "", "", "Where is Dan's roommate from?", "Hong Kong", "Thailand"},
{"Sally was checking out books from the library", "She asked the librarian whether all of them were due the next month", "The librarian said that", "only some of them", "were", "She added", "that", "Sally", "could check", "the due dates", "online", "", "4", "", "", "", "How did the librarian say Sally could check the due dates?", "Online", "By phone"},
{"Jay was trying to choose which sandwich to get at the deli", "He asked whether all of them came with a soup", "The cashier said that", "only some of them", "did", "He added", "that", "the ones", "that came", "with soup", "were indicated", "on the menu", "5", "", "", "", "", "", ""},
{"Sam was looking at the books on the list for his class", "He asked his friend whether all of them were required reading", "His friend said that", "only some of them", "were", "She added", "that", "Sam", "could buy them", "cheaper", "online", "", "4", "", "", "", "", "", ""},
{"Sonja and Alex were trying to decide which concert to go to", "Alex asked Sonja whether all of them were in the evening", "Sonja said that", "only some of them", "were", "She added", "that", "Alex", "could choose", "which one", "to go to", "", "4", "", "", "", "", "", ""},
{"Lee and Carol wanted to buy one of the hot tubs at the store", "Lee asked Carol whether all of them could sit eight people", "Carol said that", "only some of them", "could", "She added", "that", "she did not", "foresee", "needing", "eight seats", "", "4", "", "", "", "", "", ""},
{"Peter and Anne were considering presents for a baby shower", "Anne asked Peter whether all of them would work for either gender", "Peter said that", "only some of them", "would", "He added", "that", "she could", "make", "the final choice", "", "", "3", "", "", "", "", "", ""},
{"Tyler and Rose wanted to serve ice cream to the guests", "Rose asked Tyler whether all of them could eat dairy", "Tyler said that", "only some of them", "could", "He added", "that", "sorbet", "was also", "available", "", "", "3", "", "", "", "", "", ""},
{"Kylie and Lauren were trying to decide which air conditioner to buy", "Lauren asked Kylie whether all of them were environmentally friendly", "Kylie said that", "only some of them", "were", "She added", "that", "she cared", "more", "about", "how powerful", "they were", "5", "", "", "", "", "", ""},
{"Carmen and Maria were picking flowers in the garden", "Maria asked Carmen whether all of them would last long in a vase", "Carmen said that", "only some of them", "would", "She added", "that", "they could", "always", "pick more", "", "", "3", "", "", "", "", "", ""},
{"The freshman was trying to decide which English class to take", "He asked his classmate whether any of them were particularly easy", "His classmate said that", "only some of them", "were", "He added", "that", "it depends on", "the teacher", "", "", "", "2", "", "", "", "What year was the student?", "Freshman", "Sophomore"},
{"The shopper was trying to decide which headphones to buy", "He asked the clerk whether any of them were sound-cancelling", "The clerk said that", "only some of them", "were", "He added", "that", "regular headphones", "would be", "just as good", "", "", "3", "", "", "", "Did the clerk recommend sound-cancelling headphones?", "No", "Yes"},
{"Ellen was looking at the desserts at the buffet", "She asked the waiter whether any of them were sugar-free", "He said that", "only some of them", "were", "He added", "that", "the sugar-free", "jello", "was", "really good", "", "4", "", "", "", "Which dessert does the waiter recommend?", "Sugar-free jello", "Pudding"},
{"Will was trying to decide which tie to wear", "He asked Alice whether any of them went well with his suit", "She said that", "only some of them", "did", "She added", "that", "she", "especially liked", "the one", "with", "blue stripes", "5", "", "", "", "Which tie did Alice like?", "The blue striped one", "The red one"},
{"Kristen and Ruth had to use one of the printers in the library", "Kristen asked Ruth whether any of them could print double-sided", "Ruth said that", "only some of them", "could", "She added", "that", "there might", "be a long line", "waiting", "to use", "those", "5", "", "", "", "", "", ""},
{"Grant and Joel were looking at pumpkins in the pumpkin patch", "Joel asked Grant whether any of them were big enough to carve for Halloween", "Grant said that", "only some of them", "were", "He added", "that", "it was", "a little early", "to be thinking", "about Halloween", "anyway", "5", "", "", "", "", "", ""},
{"Joey and Ryan wanted to eat one of the pies their mother was baking", "Ryan asked Joey whether any of them had chocolate in them", "Joey said that", "only some of them", "did", "He added", "that", "they", "still needed", "to bake", "for a while", "", "4", "", "", "", "", "", ""},
{"Sylvia and Audrey were trying to decide which color nail polish to use", "Sylvia asked Audrey whether any of them were sparkly", "Audrey said that", "only some of them", "were", "She added", "that", "the purple", "was", "an especially pretty", "color", "", "4", "", "", "", "", "", ""},
{"Donald and Shirley were looking at the cucumbers in the garden", "Donald asked Shirley whether any of them were big enough to pick", "Shirley said that", "only some of them", "were", "She added", "that", "the beans", "were", "in good shape,", "though", "", "4", "", "", "", "", "", ""},
{"Sophie and Jack had to choose which city to visit on vacation", "Jack asked Sophie whether any of them had a famous aquarium", "Sophie said that", "only some of them", "did", "She added", "that", "she", "also wanted", "to visit", "a botanical garden", "", "4", "", "", "", "", "", ""},
{"Jasper and Louise were flipping through channels on TV", "Louise asked Jasper whether any of them were showing a romantic comedy", "Jasper said that", "only some of them", "were", "He added", "that", "he", "would prefer", "to watch", "a nature program", "", "4", "", "", "", "", "", ""},
{"Neil and Eileen were trying to decide which team to support", "Eileen asked Neil whether any of them had cute mascots", "Neil said that", "only some of them", "did", "He added", "that", "he", "did not", "care much", "about", "mascots", "5", "", "", "", "", "", ""},
{"Julie realized she had forgotten to put the chocolates in the fridge", "She called her roommate and asked whether all of them had melted already", "Her roommate said that", "all of them", "had", "She added", "that", "they", "had made", "a mess", "on the counter", "", "4", "", "", "", "Did the chocolates melt?", "Yes", "No"},
{"The secretary was collecting course evaluations", "She asked Lisa whether all of the evaluations had been completed", "Lisa said that", "all of them", "had", "She added", "that", "she had left", "the pencils", "there", "for", "the next section", "5", "", "", "", "What did Lisa do with the pencils?", "Brought them back", "Left them in the room"},
{"Max and Jim needed to add carrots to their big salad", "Max asked Jim whether all of them had been chopped", "Jim said that", "all of them", "had", "He added", "that", "his hands", "ached", "from", "all", "the chopping", "5", "", "", "", "What was Jim chopping for the salad?", "Carrots", "Tomatoes"},
{"Sandi didn't want her cats running around during the dinner party", "She asked Ryan whether all of them had been shut in the upstairs room", "Ryan said that", "all of them", "had", "He added", "that", "he", "had put", "the litter box", "there", "as well", "5", "", "", "", "Why did Sandi and Ryan put the cats upstairs?", "Dinner party", "Going on vacation"},
{"Bill and Jorge had to mark the roads the morning of the 5K race", "Bill asked Jorge whether all of them had been marked", "Jorge said that", "all of them", "had", "He added", "that", "he", "had also", "set up", "the water stop", "", "4", "", "", "", "What race were Bill and Jorge setting up?", "5k race", "Marathon"},
{"Jack was trying to choose which version of the software to buy", "He asked the saleswoman whether all of them would run on a Mac", "The saleswoman said that", "all of them", "would", "She added", "that", "someone", "could", "help Jack", "install", "the software", "5", "", "", "", "What kind of computer did Jack want to run the software on?", "Mac", "PC"},
{"Nikki was trying to convince Amy to read her favorite book series", "Amy asked Nikki whether all of them had happy endings", "Nikki said that", "all of them", "did", "She added", "that", "the stories", "were", "very interesting", "as well", "", "4", "", "", "", "What did Nikki like about the books?", "The stories", "The illustrations"},
{"Mitch was showing James the photos he had taken the other day", "James asked Mitch whether all of them had been touched up", "Mitch said that", "all of them", "had", "He added", "that", "it is", "usually necessary", "to touch up", "the lighting", "a little", "5", "", "", "", "What does Mitch usually touch up?", "The lighting", "The colors"},
{"Terry was trying to choose a watch to buy", "He asked the clerk whether all of them had stopwatches", "The clerk said that", "all of them", "did", "He added", "that", "some", "had", "count-down timers", "as well", "", "4", "", "", "", "", "", ""},
{"Jackie and Rachel were talking about their co-workers", "Jackie asked Rachel whether all of them really rode their bikes to work", "Rachel said that", "all of them", "did", "She added", "that", "they were", "always talking", "about their bikes", "around", "the water cooler", "5", "", "", "", "", "", ""},
{"Johnny's physical therapist had given him new exercises to do", "Johnny asked the physical therapist whether all of them were really necessary", "The physical therapist said that", "all of them", "were", "She added", "that", "they", "would help", "build up", "his", "back muscles", "5", "", "", "", "", "", ""},
{"Jon was getting ready to take care of Kelly's cats for the weekend", "Jon asked Kelly whether all of them were outside cats", "Kelly said that", "all of them", "were", "She added", "that", "they still", "always came", "back in", "when it was time", "for food", "5", "", "", "", "", "", ""},
{"The manager had many forms to sign", "He asked his secretary whether all of them were ready yet", "The secretary said that", "all of them", "were", "She added", "that", "they", "had to", "be finished", "before", "five o'clock", "5", "", "", "", "", "", ""},
{"Paula wanted to try one of the new brands of cat food for her cat", "She asked the pet store employee whether all of them were high in protein", "The employee said that", "all of them", "were", "She added", "that", "the chicken-based", "flavors", "were", "very popular", "", "4", "", "", "", "", "", ""},
{"The teacher wanted to borrow his colleague's markers for the whiteboard", "He asked his colleague whether all of them worked", "His colleagues said that", "all of them", "did", "He added", "that", "there were also", "more", "in", "the supply closet", "", "4", "", "", "", "", "", ""},
{"Carla and Luke wanted to use one of the bright colors of paper to print flyers", "Luke asked Carla whether all of them were recyclable", "Carla said that", "all of them", "were", "She added", "that", "blue", "was always", "a good choice", "", "", "3", "", "", "", "", "", ""},
{"Kristy and Jeff had picked strawberries at a farm", "Kristy asked Jeff whether all of them were gone", "Jeff said that", "all of them", "were", "He added", "that", "they", "had been", "delicious", "", "", "3", "", "", "", "", "", ""},
{"Tim had watered the plants in the front yard", "His mother asked him whether all of them had actually needed watering", "Tim said that", "all of them", "had", "He added", "that", "the heat", "was", "really tough", "on plants", "", "4", "", "", "", "", "", ""},
{"Casey and Jody were washing dishes after dinner", "Jody asked Casey whether all of them could go in the dishwasher", "Casey said that", "all of them", "could", "He added", "that", "he", "hated", "washing dishes", "by hand", "", "4", "", "", "", "", "", ""},
{"Carrie was photocopying articles for her advisor", "She asked her advisor whether all of them were worth reading", "Her advisor said that", "all of them", "were", "She added", "that", "Carrie", "would enjoy", "them", "", "", "3", "", "", "", "", "", ""},
{"Karen and Nick were getting the books from the reading list for their class", "Karen asked Nick whether all of them were in the university bookstore", "Nick said that", "all of them", "were", "He added", "that", "they", "had both", "new", "and used", "copies", "5", "", "", "", "", "", ""},
{"Dustin was looking at comics at his friend's house", "He asked his friend whether all of them were classic editions", "His friend said that", "all of them", "were", "He added", "that", "they", "were in", "mint condition", "", "", "3", "", "", "", "", "", ""},
{"Rick was sorting through the shoes in his closet", "He asked his son whether all of them were out of style", "His son said that", "all of them", "were", "He added", "that", "everything", "Rick owned", "was", "out of", "style", "5", "", "", "", "", "", ""},
{"Richard and Cindy were baking potatoes for dinner", "Richard asked Cindy whether all of them were ready", "Cindy said that", "all of them", "were", "She added", "that", "the sour cream", "was", "already", "on the table,", "too", "5", "", "", "", "", "", ""},
{"The kids were gathering up the game controllers to play video games", "They asked their mom whether any of them had batteries", "The mom said that", "all of them", "did", "She added", "that", "they", "could only", "play for", "thirty minutes", "", "4", "", "", "", "What were the kids going to play?", "Video games", "Board games"},
{"Anita was trying to choose one of the French textbooks", "She asked the clerk whether any of them came with CDs", "The clerk said that", "all of them", "did", "She added", "that", "the CDs", "were", "very helpful", "", "", "3", "", "", "", "Who did Anita ask about the books?", "The clerk", "Her teacher"},
{"Lauren and Sally were trying to decide which mall in the city to go to on Saturday", "Lauren asked whether any of them had a good food court", "Sally said that", "all of them", "did", "She added", "that", "one", "in particular", "had", "a great", "pretzel stand", "5", "", "", "", "Who was Sally going to the mall with?", "Lauren", "Bethany"},
{"Gary and Dana had picked up some snacks at the gas station", "Dana asked Gary whether any of them would spoil in the heat", "Gary said that", "all of them", "would", "He added", "that", "they would", "be", "home soon,", "anyway", "", "4", "", "", "", "Where did Dana and Gary get snacks?", "The gas station", "The mall"},
{"Derek and Sue were looking at rings at the jewelry store", "Derek asked Sue whether any of them caught her eye", "Sue said that", "all of them", "did", "She added", "that", "she", "felt like", "a kid", "in a", "candy store", "5", "", "", "", "Did Julie like the rings?", "Yes", "No"},
{"Nathan wanted eat one of the sandwiches available in the cafeteria", "He asked his coworker whether any of them were decent", "His coworker said that", "all of them", "were", "She added", "that", "the daily special", "was", "a turkey BLT", "", "", "3", "", "", "", "Where was Nathan planning on eating?", "The cafeteria", "A restaurant"},
{"Brad and Liz were looking at baby names in a book", "Liz asked Brad whether any of them were had historical significance", "He said that", "all of them", "did", "He added", "that", "some", "were", "more obscure", "than", "others", "5", "", "", "", "What were Brad and Liz looking for names for?", "A baby", "A pet"},
{"Spencer was thinking about countries where he could go to teach English", "He asked his girlfriend whether any of them were appealing to her", "She said that", "all of them", "were", "She added", "that", "she", "was really", "up for", "an adventure", "", "4", "", "", "", "Why was Spencer going abroad?", "To teach English", "To study"},
{"Jordan was at the bookstore trying to choose a new poster to put on her wall", "She asked her roommate whether any of them would go with the colors in their room", "She said that", "all of them", "would", "She added", "that", "she", "loved", "the Monet print", "", "", "3", "", "", "", "", "", ""},
{"Fred and Erin wanted to go running at one of the parks in town", "Fred asked Erin whether any of them had water fountains", "She said that", "all of them", "did", "She added", "that", "East Park", "also had", "restrooms", "", "", "3", "", "", "", "", "", ""},
{"AJ and Ted wanted to try one of the new dishes at their favorite restaurant", "Ted asked AJ whether any of them sounded especially good", "AJ said that", "all of them", "did", "He added", "that", "he", "did not know", "which", "to choose", "", "4", "", "", "", "", "", ""},
{"Angela was very confused by the homework problems", "She asked Tim whether he had understood any of them", "Tim said that", "he understood", "all of them", "He added", "that", "he", "would not mind", "helping her", "after class", "", "4", "", "", "", "", "", ""},
{"Marisa and Colin wanted to buy a new showerhead at the hardware store", "Marisa asked Colin whether any of them had different pressure settings", "Colin said that", "all of them", "did", "He added", "that", "they", "came in", "metal", "or plastic,", "too", "5", "", "", "", "", "", ""},
{"Kate was looking at the cat toys at the pet store", "She asked the salesman whether any of them had catnip in them", "He said that", "all of them", "did", "He added", "that", "the toy mice", "were", "very popular", "", "", "3", "", "", "", "", "", ""},
{"Kathryn was trying to choose a picture book to read before bed", "She asked her big sister whether any of them were about animals", "Her big sister said that", "all of them", "were", "She added", "that", "her favorite", "was", "about", "a dog", "", "4", "", "", "", "", "", ""},
{"Lara and Joseph were considering which topping to get on their pizza", "Joseph asked Lara whether any of them would go well with green peppers", "Lara said that", "all of them", "would", "She added", "that", "she", "felt like", "mushrooms,", "too", "", "4", "", "", "", "", "", ""},
{"Heath and Steven were looking at new video game systems", "Steven asked Heath whether any of them were better than his old system", "Heath said that", "all of them", "were", "He added", "that", "the real issue", "was", "which one", "had", "the best games", "5", "", "", "", "", "", ""},
{"Brendan and Everett had to pick which towels to bring to the beach", "Brendan asked Everett whether any of them were extra long", "Everett said that", "all of them", "were", "He added", "that", "they", "should bring", "a few", "extras", "", "4", "", "", "", "", "", ""},
{"Ernest and Nancy were trying to decide which buffet to go to", "Nancy asked Ernest whether any of them had a student discount", "Ernest said that", "all of them", "did", "He added", "that", "they", "should choose", "the one", "that", "was closest", "5", "", "", "", "", "", ""},
{"Lola and Danny had picked up some avocados at the store", "Danny asked Lola whether any of them were ripe enough to eat", "Lola said that", "all of them", "were", "She added", "that", "they", "should make", "guacamole", "", "", "3", "", "", "", "", "", ""},
{"Gabby was trying to decide which flavor of pudding to make for dessert", "She asked her father whether any of them sounded good to him", "He said that", "all of them", "did", "He added", "that", "he", "would be", "happiest", "with", "tapioca", "5", "", "", "", "", "", ""},
{"Adrienne and Maddie wanted to take the canoe out on one of the lakes near their house", "Maddie asked Adrienne whether any of them had snapping turtles", "Adrienne said that", "all of them", "did", "She added", "that", "they would", "be safe", "in the canoe", "regardless", "", "4", "", "", "", "", "", ""},
{"Melissa wanted soft serve from one of the local ice cream shops", "She asked her mother whether any of them had sprinkles", "Her mother said that", "all of them", "did", "She added", "that", "she", "liked", "sprinkles,", "too", "", "4", "", "", "", "", "", ""},
{"Nico and his friends were trying to decide which of their cars to take to the concert", "Nico asked whether any of them had air conditioning", "His friend Pat said that", "all of them", "did", "He added", "that", "his own car", "was", "low", "on gas", "", "4", "", "", "", "", "", ""},
{"Stephanie loved the stones in Jim's rock collection", "She asked him whether they were from nearby", "Jim said that", "many of them", "were", "He added", "that", "the rest", "he had", "gotten", "while traveling", "", "4", "", "", "", "What did Jim have a collection of?", "Stamps", "Rocks"},
{"Anthony was thinking of joining his friend Tad's intramural soccer team", "Anthony asked Tad whether the players were very experienced", "Tad said that", "many of them", "were", "He added", "that", "the rest", "were new", "but", "had already", "improved a lot", "5", "", "", "", "How were the new players in the team doing?", "They had improved.", "They had made no progress."},
{"Jake and Charlie were talking about the bars in town", "Charlie asked whether they had happy hours", "Jake said that", "many of them", "did", "He added", "that", "the rest", "had", "various", "other specials", "", "4", "", "", "", "", "", ""},
{"Joe was on a college tour", "He asked the tour guide Gorden whether the classes there were discussion-based", "Gordon said that", "many of them", "were", "He added", "that", "the rest", "were", "labs or lectures,", "but", "very interesting", "5", "", "", "", "", "", ""},
{"Hillary was visiting a college and was interested in the restaurants in town", "She asked an older student whether they used local suppliers", "The student said that", "many of them", "did", "He added", "that", "the rest", "were", "big chains", "", "", "3", "", "", "", "", "", ""},
{"Jason and Jackie had a lot of library books to return", "Jackie asked whether they were renewable", "Jason said that", "many of them", "were", "He added", "that", "the rest", "had", "to be returned", "right away,", "though", "5", "", "", "", "", "", ""},
{"Mark wanted to download songs from the band he had just heard", "He asked Alex whether their songs were on iTunes", "Alex said that", "none of them", "were", "He added", "that", "they", "were all", "on Youtube", "", "", "3", "", "", "", "Where could Mark hear the band's songs?", "Youtube", "iTunes"},
{"Jackson was looking at sneakers in the shoe store", "He asked the clerk which brand made shoes with Velcro", "The clerk said that", "none of them", "did", "He added", "that", "Velcro", "had gone", "out of style", "", "", "3", "", "", "", "Does the clerk think Velcro is popular nowadays?", "No", "Yes"},
{"Jan and Marcia were looking at blenders", "Marcia asked Jan whether they could make ice cream", "Jan said that", "none of them", "could", "She added", "that", "she", "was trying", "to avoid", "dairy,", "anyway", "5", "", "", "", "", "", ""},
{"Nell was talking with her old soccer teammate, Emma, at the reunion", "She asked Emma whether her kids played soccer", "Ella said that", "none of them", "did", "She added", "that", "they", "were on", "the swim team", "", "", "3", "", "", "", "", "", ""},
{"Cassie and Rich were looking at apples at the grocery store", "Cassie asked Rich whether the apples in this aisle were organic", "Rich said that", "none of them", "were", "He added", "that", "there was", "an organic", "aisle", "around", "the corner", "5", "", "", "", "", "", ""},
{"Damien wanted a jacket with elbow patches", "He asked his father which stores in town sold jackets like that", "His father said that", "none of them", "did", "He added", "that", "he", "could", "order one", "online", "", "4", "", "", "", "", "", ""},
{"Beth and Emily were trying to decide which bar to go to", "Beth asked Emily whether the bars downtown were open until 2:00", "Emily said that", "several of them", "were", "She added", "that", "the rest", "closed", "at 1:00", "", "", "3", "", "", "", "Are there bars open after midnight?", "Yes", "No"},
{"Ella was looking at the spices in the spice rack", "She asked Trey whether they were used in Indian food", "Trey said that", "several of them", "were", "He added", "that", "the rest", "were", "used in", "other types", "of food", "5", "", "", "", "What was Ella looking at?", "Spices", "Drinks"},
{"Phil and Monica were looking at houses with the realtor", "Phil asked the realtor whether these houses had home security systems", "The realtor said that", "several of them", "did", "She added", "that", "the rest", "could", "have them", "installed", "", "4", "", "", "", "", "", ""},
{"Shannon and Joan were perusing the power tools in the garage", "Joan asked Shannon whether they were under warranty", "Shannon said that", "several of them", "were", "She added", "that", "the rest", "were", "too old", "", "", "3", "", "", "", "", "", ""},
{"Hannah and Crystal wanted to buy wine glasses at the yard sale", "Crystal asked Hannah whether they were from a matched set", "Hannah said that", "several of them", "were", "She added", "that", "the rest", "were", "unique", "", "", "3", "", "", "", "", "", ""},
{"Geoff and Marion wanted to visit one of the islands", "Geoff asked Marion whether they were close enough for a day trip", "Marion said that", "several of them", "were", "She added", "that", "the rest", "were", "a bit", "farther away", "", "4", "", "", "", "", "", ""},
{"Teresa had shared a cookie recipe with Greg", "She asked Greg whether the cookies had turned out all right", "Greg said that", "most of them", "had", "He added", "that", "the rest", "had gotten", "a little", "burnt", "", "4", "", "", "", "What happened to some of the cookies?", "They got burnt.", "They broke."},
{"Scott was getting ready to order new software in the library", "He asked the technician whether the computers were compatible", "The technician said that", "most of them", "were", "He added", "that", "the rest", "would", "have to be", "upgraded", "first", "5", "", "", "", "What was Scott ordering for the library?", "Software", "Books"},
{"Elaine and Cliff were at a wedding reception", "Elaine asked Cliff whether the drinks were non-alcoholic", "Cliff said that", "most of them", "were", "He added", "that", "the rest", "were", "alcoholic", "", "", "5", "", "", "", "", "", ""},
{"Jerry and Sheila wanted to bring a pack of gum on the airplane", "Sheila asked Jerry whether the ones at the newsstand were sugar-free", "Jerry said that", "most of them", "were", "He added", "that", "the rest", "did not", "look", "very good", "", "4", "", "", "", "", "", ""},
{"Gerry and his son were at the amusement park", "Gerry asked the attendant whether the rides had height limits", "The attendant said that", "most of them", "did", "He added", "that", "the others", "were still", "fun", "", "", "3", "", "", "", "", "", ""},
{"Alan and Frank wanted to visit the museum", "Alan asked Frank whether the new exhibits were open to the public", "Frank said that", "most of them", "were", "He added", "that", "the rest", "would be", "open", "soon", "", "4", "", "", "", "", "", ""},
{"Amy was impressed by the other squash players in the club she was joining", "She asked another player whether they had had coaching", "The player said that", "a few of them", "had", "She added", "that", "the rest", "had just", "picked it up", "over time", "", "4", "", "", "", "What club was Amy joining?", "Squash club", "Chess club"},
{"Joshua felt that the computers in the library were too slow", "He asked Seth whether the computers ran slowly for him too", "Seth said that", "a few of them", "did", "He added", "that", "the rest", "he", "had not tried", "yet", "", "4", "", "", "", "Where were Joshua and Seth testing computers?", "The library", "The student union"},
{"Dylan and Janelle were going to look at apartments", "Janelle asked Dylan whether the units downtown had washing machines", "Dylan said that", "a few of them", "did", "He added", "that", "the rest", "were", "near", "the laundromat", "", "4", "", "", "", "", "", ""},
{"Jeremy and Brett were planning a hike", "Jeremy asked Brett whether the trails on this side of town were hilly", "Brett said that", "a few of them", "were", "He added", "that", "the rest", "were", "poorly maintained,", "though", "", "4", "", "", "", "", "", ""},
{"Colleen and Edward wanted to go bowling", "Edward asked Colleen whether the bowling alleys in town had weeknight specials", "Colleen said that", "a few of them", "did", "She added", "that", "the others", "had", "better food", "", "", "3", "", "", "", "", "", ""},
{"Liza and Beverly had just picked their classes", "Liza asked Beverly whether her classes had labs", "Beverly said that", "a few of them", "did", "She added", "that", "the rest", "were", "language", "classes", "", "4", "", "", "", "", "", ""},
{"John was looking at cell phones in the store", "He asked the clerk which ones had voice recognition", "The clerk said that", "none of them", "did", "He added", "that", "only", "smart phones", "have that", "", "", "3", "", "", "", "What kinds of phones did the clerk say have voice recognition?", "Smart phones", "All phones"},
{"Michelle and her classmates wanted to take a group photo after dinner", "She asked her classmate Kenny who had a camera", "Kenny said that", "none of them", "did", "He added", "that", "they", "would have", "other chances", "later", "", "4", "", "", "", "Were the students able to take a picture?", "No", "Yes"},
{"Maureen and Bonnie wanted to go to one of the nearby beaches", "Maureen asked Bonnie whether they would have sharks", "Bonnie said that", "none of them", "would", "She added", "that", "shark attacks", "are", "profoundly rare,", "anyway", "", "4", "", "", "", "", "", ""},
{"Curtis and Joanne were looking at chandeliers", "Joanne asked Curtis whether they needed special lightbulbs", "Curtis said that", "none of them", "did", "He added", "that", "they", "were", "just like", "normal lamps", "", "4", "", "", "", "", "", ""},
{"Alice and Kara were planting oak trees", "Alice asked Kara whether they would need to be pruned regularly", "Kara said that", "none of them", "would", "She added", "that", "they", "were very", "low maintenance", "", "", "3", "", "", "", "", "", ""},
{"Gabe and Marcus were hanging out after the first day of class", "Marcus asked Gabe whether the girls in his classes were single", "Gabe said that", "none of them", "were", "He added", "that", "he wouldn't", "introduce", "any girls", "to Marcus,", "anyway", "5", "", "", "", "", "", ""},
{"The professors were discussing some students' presentations", "Dr. Smith asked Dr. Rivera whether the presentations had too many animations", "Dr. Rivera said that", "two of them", "did", "He added", "that", "the rest", "were", "all right", "", "", "3", "", "", "", "Who had given presentations?", "Students", "Job applicants"},
{"Glenn and Leah were planning to go to one of the concerts in town", "Glenn asked Leah whether they would have a light show", "Leah said that", "two of them", "would", "She added", "that", "the rest", "were", "more", "low-key", "", "4", "", "", "", "Who was Glenn going to a concert with?", "Leah", "Marty"},
{"Natalie and Dean wanted to take a train on their vacation", "Natalie asked Dean whether they would have dining cars", "Dean said that", "two of them", "did", "He added", "that", "the rest", "were", "commuter trains", "", "", "3", "", "", "", "", "", ""},
{"Tess and Wayne were shopping for a new camera", "Tess asked Wayne whether the models in this store had telephoto lenses", "Wayne said that", "three of them", "did", "He added", "that", "the rest", "were", "point-and-clicks", "", "", "3", "", "", "", "", "", ""},
{"Chelsea and Wyatt were talking about going to a movie", "Wyatt asked Chelsea whether the movies in the theater were in 3-D", "Chelsea said that", "three of them", "were", "She added", "that", "the rest", "were", "normal", "", "", "3", "", "", "", "Where did they want to see a movie?", "In the theater", "At home"},
{"Josie and Christian were looking at the chickens in the coop", "Josie asked Christian whether the chickens were old enough to lay eggs", "Christian said that", "three of them", "were", "He added", "that", "the rest", "would be", "ready", "soon", "", "4", "", "", "", "", "", ""},
{"Jessie and Caleb were getting ready to go to orientation", "Caleb asked Jessie whether the workshops at orientation were mandatory", "Jessie said that", "two of them", "were", "She added", "that", "the rest", "were", "optional", "but", "recommended", "5", "", "", "", "", "", ""},
{"Chad and Tori wanted to adopt a dog", "Chad asked Tori whether the dogs at the pound were fixed", "Tori said that", "three of them", "were", "She added", "that", "the rest", "weren't", "old enough", "yet", "", "4", "", "", "", "", "", ""},
{"Drew and Giles were in the computer lab", "Giles asked Drew whether the documents had printed correctly", "Drew said that", "four of them", "had", "He added", "that", "the rest", "had gotten", "jammed", "", "", "3", "", "", "", "What had happened to the documents?", "Got jammed", "Out of paper"},
{"Mandy and Shelby wanted to go out to eat", "Mandy asked Shelby whether the restaurants downtown served brunch", "Shelby said that", "four of them", "did", "She added", "that", "the rest", "had", "great", "breakfast", "options", "5", "", "", "", "", "", ""},
{"Damon was doing laundry", "He asked his mother whether the shirts could go in the dryer", "His mother said that", "four of them", "could", "She added", "that", "the rest", "should be", "hung up", "to dry", "", "4", "", "", "", "", "", ""},
{"Ethan and Connor had just seen a big crash in the bike race", "Ethan asked Connor whether those riders were still in the race", "Connor said that", "four of them", "were", "He added", "that", "the rest", "had", "dropped out", "", "", "3", "", "", "", "", "", ""}
};



#--- ORGANIZING ---#

# Initialize array for a sentence of a single trial
array <string> thissentence[things] = {"", "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", ""};

#Creates and then randomizes order for critical sentences
array <int> order[critical_sentences_in_exp] = {1};
array <string> criticalvsfiller[1] = {"critical"};
loop
	int sentnum = 2
until
	sentnum > critical_sentences_in_exp
begin
	order[sentnum] = sentnum;
	criticalvsfiller.add("critical");
	sentnum = sentnum+1;
end;
order.shuffle();


#Creates and then randomizes order for filler sentences
array <int> fillerorder[filler_sentences_in_exp] = {1};
array <string> fillers[filler_sentences_in_exp] = {"filler"};
loop
	int sentnum = 1
until
	sentnum > filler_sentences_in_exp
begin
	fillerorder[sentnum] = sentnum;
	criticalvsfiller.add("filler");
	sentnum = sentnum+1;
end;
fillerorder.shuffle();

#randomizes the order of criticals vs fillers
criticalvsfiller.shuffle();


#array <int> order[16] = {25, 26, 43, 46, 49, 58, 66, 76, 90, 106, 107, 108, 119, 122, 147, 81};
#order.shuffle();							# Create a random order of filler trials at the beginning
#array<int> restorder[1] = {1};
#loop
#	int nextnum = 2;						# Create a random order of the remaining trials
#until 
#	nextnum > sentences_in_exp
#begin
#	if nextnum == 25 then
#	elseif nextnum == 26 then
#	elseif nextnum == 43 then
#	elseif nextnum == 46 then
#	elseif nextnum == 49 then
#	elseif nextnum == 58 then
#	elseif nextnum == 66 then
#	elseif nextnum == 76 then
#	elseif nextnum == 90 then
#	elseif nextnum == 106 then
#	elseif nextnum == 107 then
#	elseif nextnum == 108 then
#	elseif nextnum == 119 then
#	elseif nextnum == 122 then
#	elseif nextnum == 147 then
#	elseif nextnum == 181 then
#	else
#		restorder.add(nextnum);
#	end;
#	nextnum = nextnum + 1;
#end;
#restorder.shuffle();
#order.append(restorder);					# Add the remaining trials after the original fillers

	
	
#-----------------   SELFPACED() SUBROUTINE   -----------------
	sub														# Function that does self-paced reading.
		selfpaced( array <string,1>& sentence, string boundinfo, string quantinfo, string iteminfo, int orderinexp)
																#  The argument is a sentence in array format (each
	begin														#  element is a "region", then three strings and an int giving
																#  info about that sentence (which will later be
	loop														#  output into the codes
		int region = 0;									# Start before the first word (so that it begins
	until														#  as all dashes)
		region > sentence.count()						# Go until the last word
	begin
		string sentencetodisplay = "";				# Initialize string as empty; later this will be
																#  built up into dashes and the actual words
		int thisregion_chars = 0;
		if region > 0 then								# Gets the length of the region (unless this is
																#  the empty 0th region
			thisregion_chars = sentence[region].count();
		end;
																# This loop makes a string out of all
																#	dashes, except for the current region,
																#	which is shown as a word
		loop											
			int origregion = 1;							# Go through each region of the sentence
		until 
			origregion > sentence.count()
		begin
			string newline = " ";							# If this is region 1, 2, or 6, there will be
			string period = "";								#  a newline; otherwise there will be a space.
			if origregion == 1 then							#  If it's 1, 2, 5, or end there will be
				newline = "\n";								#  a period
				period = ".";
			elseif origregion == 2 then
				newline = "\n";
				period = ".";
			elseif origregion == 5 then
				period = "."
			elseif origregion == 6 then
				newline = "\n";
			elseif origregion == sentence.count() then
				period = ".";
				newline = "";
			end;
				
			if origregion == region then				# If we're on the region being read, then
																#  show that region
				sentencetodisplay = sentencetodisplay + sentence[origregion] + period + newline;
			else												# Otherwise, show dashes
				int numdashes = sentence[origregion].count();
				string dashes = "";
				loop
					int i = 1;
				until
					i > numdashes
				begin
					dashes = dashes + "-";
					i = i + 1;
				end;
				sentencetodisplay = sentencetodisplay + dashes + period + newline;
			end;
			origregion = origregion + 1;
		end;
		
																# Show the sentence
		show_sentence_caption.set_caption(sentencetodisplay);
		if region > 0 then
			show_sentence_event.set_event_code(iteminfo + ";" + boundinfo + ";" + quantinfo + ";" + string(region) + ";" + sentence[region] + ";" + string(orderinexp));
		else
			show_sentence_event.set_event_code(iteminfo + ";" + boundinfo + ";" + quantinfo + ";" + string(region) + ";" + "-" + ";" + string(orderinexp));
		end;
		show_sentence_picture.set_part_x(1, -450, left_coordinate);
		show_sentence_caption.redraw();
		show_sentence.present();
		
		region = region + 1;								# Go to the next region
	end;
	end;

#-----------------   SELFPACEDFILLER() SUBROUTINE   -----------------
	sub														# Function that does self-paced reading for filler sentence.
		selfpacedfiller( array <string,1>& sentence, int orderinexp)
																#  The argument is a sentence in array format (each
	begin														#  element is a "region", then three strings and an int giving
																#  info about that sentence (which will later be
	loop														#  output into the codes
		int region = 0;									# Start before the first word (so that it begins
	until														#  as all dashes)
		region > sentence.count()						# Go until the last word
	begin
		string sentencetodisplay = "";				# Initialize string as empty; later this will be
																#  built up into dashes and the actual words
		int thisregion_chars = 0;
		if region > 0 then								# Gets the length of the region (unless this is
																#  the empty 0th region
			thisregion_chars = sentence[region].count();
		end;
																# This loop makes a string out of all
																#	dashes, except for the current region,
																#	which is shown as a word
		loop											
			int origregion = 1;							# Go through each region of the sentence
		until 
			origregion > sentence.count()
		begin
			string newline = " ";							# If this is region 1, 2, or 6, there will be
			string period = "";								#  a newline; otherwise there will be a space.
			if origregion == 1 then							#  If it's 1, 2, 5, or end there will be
				newline = "\n";								#  a period
				period = ".";
			elseif origregion == 2 then
				newline = "\n";
				period = ".";
			elseif origregion == 5 then
				period = "."
			elseif origregion == 6 then
				newline = "\n";
			elseif origregion == sentence.count() then
				period = ".";
				newline = "";
			end;
				
			if origregion == region then				# If we're on the region being read, then
																#  show that region
				sentencetodisplay = sentencetodisplay + sentence[origregion] + period + newline;
			else												# Otherwise, show dashes
				int numdashes = sentence[origregion].count();
				string dashes = "";
				loop
					int i = 1;
				until
					i > numdashes
				begin
					dashes = dashes + "-";
					i = i + 1;
				end;
				sentencetodisplay = sentencetodisplay + dashes + period + newline;
			end;
			origregion = origregion + 1;
		end;
		
																# Show the sentence
		show_sentence_caption.set_caption(sentencetodisplay);
		if region > 0 then
			show_sentence_event.set_event_code("filler;filler;filler;" + string(region) + ";" + sentence[region] + ";" + string(orderinexp));
		else
			show_sentence_event.set_event_code("filler;filler;filler;" + string(region) + ";" + "-" + ";" + string(orderinexp));
		end;
		show_sentence_picture.set_part_x(1, -450, left_coordinate);
		show_sentence_caption.redraw();
		show_sentence.present();
		
		region = region + 1;								# Go to the next region
	end;
	end;
	


#-----------------   INSTRUCTIONS   -----------------
instruction_trial.present();


#-----------------   EXPERIMENT BLOCK  -----------------
int currentset = 1;												# Keeps track of the set we're on
int criticalsdone = 0;											# Keeps track of which critical sentence we're on (since the critical and filler sentences are in separate lists)
int fillersdone = 0;												# Keeps track of which filler sentence we're on (since the critical and filler sentences are in separate lists)
loop																	# Go through all the trials						
	int sentencenumber = 1;
until
	sentencenumber > sentences_in_exp
begin
	if criticalvsfiller[sentencenumber] == "critical" then	# If this is a critical sentence....
		criticalsdone = criticalsdone + 1;
		thissentence = expblock[order[criticalsdone]];		# Get the sentence for this trial
		int missingcharsatend = 4-int(thissentence[13]);	# Tells whether the vignette is shorter than 12 chunks
		int conditionnumber = int(thissentence[14]);
		string sentencetype = thissentence[15];				# Tells whether this is a critical sentence or a filler sentence
		string item = thissentence[16];							# The item identifier
	
																		# The next few lines figure out the condition
																		#  of this sentence, based on the List
		conditionnumber = conditionnumber - (version_being_run - 1);
		if conditionnumber < 1 then
			conditionnumber = conditionnumber + 4;
		end;
																		# The next few lines figure out the context
																		#  and quantifier based on the condition
		string bound = "";
		string quantifier = "";
		if conditionnumber == 1 then
			bound = "all of them";
			quantifier = "some of them";
		elseif conditionnumber == 2 then
			bound = "any of them";
			quantifier = "some of them";
		elseif conditionnumber == 3 then
			bound = "all of them";
			quantifier = "only some of them";
		elseif conditionnumber == 4 then
			bound = "any of them";
			quantifier = "only some of them";
		end;
																		# The next few lines make UP the vignette
		array <string> wholesentence[11] = {"", "", "", "", "", "", "", "", "", "", ""};
		wholesentence[1] = thissentence[1];# put \n and period after
		wholesentence[2] = thissentence[2] + " " + bound + " " + thissentence[3];# put \n and period after
		wholesentence[3] = thissentence[4];
		wholesentence[4] = quantifier;
		wholesentence[5] = thissentence[5];# put period after
		wholesentence[6] = thissentence[6];# put \n after
		wholesentence[7] = thissentence[7];
		wholesentence[8] = thissentence[8];
		wholesentence[9] = thissentence[9];
		wholesentence[10] = thissentence[10];
		wholesentence[11] = thissentence[11];
		if missingcharsatend == 0 then
			wholesentence.add(thissentence[12]);
		end;
	
		selfpaced(wholesentence, bound, quantifier, item, sentencenumber);		# Do self-paced reading

	else																			# If this is a filler sentence...
		fillersdone = fillersdone + 1;
		thissentence = fillerblock[fillerorder[fillersdone]];		# Get the sentence for this trial
		int charsafterthat = int(thissentence[13]);	# Tells whether the vignette is shorter than 12 chunks
		string sentencetype = thissentence[15];				# Tells whether this is a critical sentence or a filler sentence

		array <string> wholesentence[1] = {""};				# Make the sentence
		wholesentence[1] = thissentence[1];
		loop
			int region=2
		until
			region > 6 + charsafterthat + 1
		begin
			wholesentence.add(thissentence[region]);
			region = region+1;
		end;
		
		selfpacedfiller(wholesentence, sentencenumber);							# Do the self-paced reading

	end;


	if thissentence[17].count() > 0 then						# If there is a comprehension question
		string compq = thissentence[17];							# Get the comprehension question
		string rightanswer = thissentence[18];					# Get the correct answer
		string wronganswer = thissentence[19];					# Get the wrong answer
		show_compq_caption.set_caption(compq);					# Set the question for the caption
		show_compq_caption.redraw();
		if random() < 0.5 then										# randomly choose to put the correct answer on the left or right
			show_left_caption.set_caption(wronganswer);		# and set up the captions accordingly
			show_left_caption.redraw();					
			show_right_caption.set_caption(rightanswer);
			show_right_caption.redraw();
			show_compq_event.set_target_button(3);
			show_compq_event.set_event_code("compq right");
		else
			show_left_caption.set_caption(rightanswer);
			show_left_caption.redraw();
			show_right_caption.set_caption(wronganswer);
			show_right_caption.redraw();
			show_compq_event.set_target_button(2);
			show_compq_event.set_event_code("compq left");
		end;
		show_compq.present();										# Show the comprehension question
	end;
	
	#---------- BETWEEN-BLOCK MESSAGE ----------  
																# If we're at the end of a block
	if sentencenumber % (sentences_in_exp / sets_in_exp) == 0 then																		
		if currentset >= sets_in_exp then			# If it's the last block in the experiment
				block_end_message.set_caption("The experiment is finished! Please exit the\nroom (do not press any buttons before leaving).\nThank you for your participation!");		
		elseif currentset == sets_in_exp - 1 then
				block_end_message.set_caption(		# Otherwise
					"Block number " + string(currentset) + " is done.\n\nYou may take a break; when ready, press A to begin Block " + string(currentset+1) + 
					".\nPlease find a comfortable position and sit still while reading。\n\nThere remains " + string(sets_in_exp - currentset) + " block.");
		
		else
				block_end_message.set_caption(		# Otherwise
					"Block number " + string(currentset) + " is done.\n\nYou may take a break; when ready, press A to begin Block " + string(currentset+1) + 
					".\nPlease find a comfortable position and sit still while reading。\n\nThere remain " + string(sets_in_exp - currentset) + " blocks.");
		end;
			block_end_message.redraw();
			block_end_trial.present();

	currentset = currentset + 1;	
	end;

	ITI.present();
		
	sentencenumber = sentencenumber + 1;			# Move on to the next trial
end;